PsychoPy2experiment version="1.83.03"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Parallel port test file
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text = testing for tms
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ParallelOutComponent TMS
      syncScreen = True
      stopData = $tms_stop
      stopVal [duration (s)] = .01
      address = 0x0378
      startVal [time (s)] = $tms_onset
      startData = $tms_start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 6
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    TextComponent text_2
      color = green
      startVal [time (s)] = 6
      letterHeight = 0.1
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      text:
        DONE.

        Press spacebar to proceed
    PolygonComponent square_onset
      fillColor = $[0,0,1]
      stopVal [time (s)] = 6
      startVal [time (s)] = $square
      size = [0.2, 0.2]
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    ParallelOutComponent power_lab
      syncScreen = True
      stopData = $powerlab_stop
      stopVal [duration (s)] = $powerlab_offset
      address = 0x03BC
      startVal [time (s)] = $powerlab_onset
      startData = $powerlab_start
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Parallel port test file.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{u'tms_trial': 1, u'tms_onset': 1.5, u'square': 1, u'tms_stop': 0, u'powerlab_stop': 0, u'powerlab_onset': 1.45, u'trial': 1, u'tms_start': 5, u'powerlab_offset': 1.7999999999999998, u'powerlab_start': 5},
      {u'tms_trial': 0, u'tms_onset': 2.5, u'square': 2, u'tms_stop': 0, u'powerlab_stop': 0, u'powerlab_onset': 0, u'trial': 2, u'tms_start': 0, u'powerlab_offset': 0, u'powerlab_start': 0},
      {u'tms_trial': 1, u'tms_onset': 3.5, u'square': 3, u'tms_stop': 0, u'powerlab_stop': 0, u'powerlab_onset': 3.45, u'trial': 3, u'tms_start': 5, u'powerlab_offset': 3.8000000000000003, u'powerlab_start': 5},
      {u'tms_trial': 0, u'tms_onset': 4.5, u'square': 4, u'tms_stop': 0, u'powerlab_stop': 0, u'powerlab_onset': 0, u'trial': 4, u'tms_start': 0, u'powerlab_offset': 0, u'powerlab_start': 0},
      {u'tms_trial': 1, u'tms_onset': 5.5, u'square': 5, u'tms_stop': 0, u'powerlab_stop': 0, u'powerlab_onset': 5.45, u'trial': 5, u'tms_start': 5, u'powerlab_offset': 5.8, u'powerlab_start': 5}]
    Routine trial
  LoopTerminator trials
